PsychoPy2experiment version="2022.2.4"
Settings
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = tutorial 5
  keyboardBackend = ioHub
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Routines
  Routine trial
    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 8.0
      text [set every repeat] = $study_word
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    SliderComponent slider
      forceEndRoutine = True
      granularity = 0
      labels = "familiar", "unfamiliar"
      letterHeight = 0.05
      pos = (0, -0.3)
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5)
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  Routine test
    TextComponent text_2
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text [set every repeat] = $test
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    TextboxComponent textbox
      bold = False
      editable = True
      letterHeight = 0.05
      size = (None, None)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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    TextComponent text_3
      letterHeight = 0.05
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text = Click to Submit 
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    MouseComponent mouse
      clickable = text_3
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = study_words.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'study_word': 'rice'},
      {'study_word': 'before'},
      {'study_word': 'thing'},
      {'study_word': 'lift'},
      {'study_word': 'please'},
      {'study_word': 'come'},
      {'study_word': 'cushion'},
      {'study_word': 'tiger'},
      {'study_word': 'ocean'},
      {'study_word': 'shirt'}]
    Routine trial
  LoopTerminator trials
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = test.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'test': 'p_ea_e'},
      {'test': '_a_e'},
      {'test': 't_g_r'},
      {'test': 'c_m_'},
      {'test': '_oo_'},
      {'test': 'c_s_i_n'},
      {'test': '_ia_o'},
      {'test': 'b_f_r_'},
      {'test': 'c_s_'},
      {'test': 'j_a_s'},
      {'test': 't_i_g'},
      {'test': 'o_e_a_'},
      {'test': '_o_o_r'},
      {'test': 's_ee_'},
      {'test': 'r_c_'},
      {'test': 's_o_'},
      {'test': 'l_f_'},
      {'test': 'v_h_c_e'},
      {'test': 'd_t_'},
      {'test': 's_ir_'}]
    Routine test
  LoopTerminator trials_2
